OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.3.0)

Clock stimulator => #0
  Interstimulation interval (in sec) = 0.004
  Stimulation = OVTK_StimulationId_Number_01
Generic stream reader => #1
  Filename = C:/PYTHON_DATA/20_NISE/00_DATA/p300-train-[2019.01.19-17.09.36].ov
Input stimulations 1=#1.Output stream 3, Input stimulations 2=#0 -> Stimulation multiplexer => #2
Input signal=#1.Output stream 2, Input stimulations=#2 -> LSL Export
  Signal stream = openvibeSignal
  Marker stream = openvibeMarkers
Data=#1.Output stream 2, Stimulations=#2 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input stream 1=#1.Output stream 1, Input stream 2=#1.Output stream 2, Input stream 3=#2 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/p300-train-[$core{date}-$core{time}].ov
  Use compression = false
