OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.3.0)
Comment
  Add clock stimulus
  (0.004s) in order to
  be able to precisely
  time the marker
  stream in Python.
Comment
  Stimulator defines
  stimulation times.
Comment
  Visualisation sends the markers
  (stimulations) directly to Acquisition
   Server using TCP Tagging.
Comment
  Visualisation automatically
  picks the interface file
  that was loaded into the
  predefined location.
Comment
  Save to file
  for later
  comparison.
Comment
  Aquistion client
  for experiment
  control.

Launch
  Lua Script = ${Player_ScenarioDirectory}/p300-speller-launch.lua
  Stimulation to send = OVTK_StimulationId_Label_00
  Time to send = 2
-> P300 Speller Stimulator => #1
  Start stimulation = OVTK_StimulationId_Label_00
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Number of rows = 3
  Number of columns = 3
  Number of repetitions = 6
  Number of trials = 1
  Flash duration (in sec) = 0.200000
  No flash duration (in sec) = 0.300000
  Inter-repetition delay (in sec) = 1.000000
  Inter-trial delay (in sec) = 3.000000
  Avoid neighbor flashing = false
Clock stimulator => #2
  Interstimulation interval (in sec) = 0.004
  Stimulation = OVTK_StimulationId_Number_01
Input stimulations 1=#2, Input stimulations 2=#1 -> Stimulation multiplexer => #3
Sequence stimulations=#3 -> 0xc67a01dc P300 Speller Visualisation
  Interface filename = C:/PYTHON_DATA/20_NISE/p300-0.ui
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Flash background color = 5,5,5
  Flash foreground color = 100,100,100
  Flash font size = 60
  No flash background color = 0,0,0
  No flash foreground color = 25,25,25
  No flash font size = 40
  Target background color = 20,20,70
  Target foreground color = 10,10,30
  Target font size = 40
  Selected background color = 10,40,10
  Selected foreground color = 60,100,60
  Selected font size = 40

Acquisition client => #5
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 1=#5.Experiment information, Input stream 2=#5.Signal stream, Input stream 3=#5.Stimulations -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/p300-train-[$core{date}-$core{time}].ov
  Use compression = false

Acquisition client => #7
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1025
#7.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_Number_00
  Action to perform = Stop
